PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '10_2_yokoi'}
  Full-screen window = True
  Monitor = screen1
  Save csv file = True
  Save excel file = True
  Save log file = False
  Screen = 1
  Units = pix
  Use version = 2022.2.4
  Window size (pixels) = [1920, 1080]
  color = $[-1.000,-1.000,-1.000]
  expName = Pattern_1
  keyboardBackend = ioHub
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Routines
  Routine SlfInstr
    TextComponent SLF_INSTR
      color = $slf_color
      letterHeight = 48
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = Self
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  Routine Init
    CodeComponent INIT_CODE
      Code Type = Py
      Begin Experiment:
        # Import modules
        import datetime
        import numpy as np
        from openpyxl import Workbook, load_workbook
        import pandas as pd
        import scipy.io as io

        # Initial settings
        win.mouseVisible = False
        choice_time_max = 5.0
        conf_time_max   = 3.0
        feedback_time   = 1.0
        reward_time     = 2.0

        #choice_time_max = .3
        #conf_time_max   = .3
        #feedback_time   = .3
        #reward_time     = .3

        left_key   = 'left'
        center_key = 'down'
        right_key  = 'right'

        # Information of the experiment dialog
        participant = expInfo["participant"]

        # Number of trials in each stage
        slf_rept  = 36
        obs_rept  = 36
        test_rept = 90

        # Serial number
        game_serial_num = 1

        slf_serial_num  = 0
        obs_serial_num  = 0
        test_serial_num = 0

        # Block counter
        block_num = 1

        # Pattern of slf & obs are zero
        slf_seq_pattern = 0
        obs_seq_pattern = 0

        # Trial color
        slf_color  = "lime"
        obs_color  = "cyan"
        test_color = "orange"

        # Determine the images based on the excel file
        loc_list  = [30, 40, 50]

        idx_list = [1, 2, 3]
        # Set images
        slf_img = ['slf11.bmp', 'slf12.bmp', 'slf13.bmp']
        obs_img = ['obs11.bmp', 'obs12.bmp', 'obs13.bmp']
        test_img = slf_img + obs_img

        slf_dict = dict(zip(loc_list, slf_img))
        obs_dict = dict(zip(loc_list, obs_img))

        # Create files to store data
        get_current_time = datetime.datetime.now() # Get time in the form of "yyyy-mm-dd hh:mm:ss"
        out_name = f'subj_{participant}_1_{get_current_time:%y%m%d%H%M}'
                    # participant_yyyymmddというファイル名

        # Define sheet names and data table
        slf_sheet = "slf1"
        obs_sheet = "obs1"
        test_sheet = "test1"

        slf_data_table =  [[0] * 24 for i in range(slf_rept)]
        obs_data_table =  [[0] * 24 for i in range(obs_rept)]
        test_data_table = [[0] * 24 for i in range(test_rept)]

        # Create matlab file(dict)
        out_dict = {'slf1':slf_data_table, 'obs1':obs_data_table, 'test1':test_data_table}

        # Create excel file
        out_xlsx = out_name + ".xlsx"
        out_book = Workbook()
        #out_book = load_workbook(filename=out_xlsx)
        out_book.create_sheet(index=0, title=slf_sheet)
        out_book.create_sheet(index=1, title=obs_sheet)
        out_book.create_sheet(index=2, title=test_sheet)
        out_book.save(out_xlsx)
      End Routine:
        # Initialize clock
        onset = core.MonotonicClock()
        core.wait(3)
    TextComponent STANDBY_TEXT
      letterHeight = 48
      startVal [time (s)] = 0.0
      text = Press ‘space’ to start
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    KeyboardComponent STANDBY_RESP
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SlfChoice
    CodeComponent SLF_CHOICE_CODE
      Code Type = Py
      Begin Routine:
        slf_img1 = slf_dict[slf_loc1]
        slf_img2 = slf_dict[slf_loc2]

        # Get the presented time in slf-choice
        slf_choice_pres_time = onset.getTime() + 0.5 # Consider the fixation
      End Routine:
        # Get the responsed time in slf-choice
        slf_choice_resp_time = onset.getTime()

        # Initialize in case skipping slf-conf
        slf_conf_resp = 0
        slf_conf_pres_time = 0
        slf_conf_resp_time = 0
        is_slf_resp = 0

        # Receive choice responses and determine reward and feedback parameters
        if SLF_CHOICE_RESP.keys == left_key:
            slf_choice_pos = (-200,0)
            slf_choice_resp = 1
            slf_choice_loc = slf_loc1
            slf_reward = slf_reward1
            slf_reward_text = str(np.round(slf_reward, 1))
            is_slf_resp = 1
        elif SLF_CHOICE_RESP.keys == right_key:
            slf_choice_pos = (200,0)
            slf_choice_resp = 2
            slf_choice_loc = slf_loc2
            slf_reward = slf_reward2
            slf_reward_text = str(np.round(slf_reward, 1))
            is_slf_resp = 1
        else:
            slf_choice_pos = (100000,0)
            slf_choice_resp = 0
            slf_choice_loc = 0
            slf_reward = 0
            slf_reward_text = "F"

        # Add points according to the response
        slf_pt = 1 if slf_choice_resp == slf_correct else 0
    TextComponent SLF_FIX1
      letterHeight = 60
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $choice_time_max+0.5
      text = +
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    ImageComponent SLF_IMG1
      image [set every repeat] = $'img/' + slf_img1
      pos [set every repeat] = (-200, 0)
      size = (200, 200)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $choice_time_max
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    ImageComponent SLF_IMG2
      image [set every repeat] = $'img/' + slf_img2
      pos = (200, 0)
      size = (200, 200)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $choice_time_max
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    KeyboardComponent SLF_CHOICE_RESP
      allowedKeys = left_key,right_key
      correctAns = slfCorrect
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $choice_time_max
      storeCorrect = True
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  Routine SlfChoiceFb
    TextComponent SLF_FIX2
      letterHeight = 60
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_time
      text = +
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    PolygonComponent SLF_FB1_FRAME
      fillColor = $slf_color
      lineColor = $slf_color
      lineWidth = 20
      pos [set every repeat] = $slf_choice_pos
      shape = rectangle
      size = (220, 220)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $feedback_time
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    ImageComponent SLF_FB1_IMG1
      image [set every repeat] = $'img/' + slf_img1
      pos = (-200, 0)
      size = (200,200)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $feedback_time
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    ImageComponent SLF_FB1_IMG2
      image [set every repeat] = $'img/' + slf_img2
      pos = (200, 0)
      size = (200, 200)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $feedback_time
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  Routine SlfConf
    CodeComponent SLF_CONF_CODE
      Code Type = Py
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      Begin Routine:
        # Get the presented time in slf-confidence
        slf_conf_pres_time = onset.getTime()
      End Routine:
        # Get the responsed time in slf-confidence
        slf_conf_resp_time = onset.getTime()

        # Receive confidence responses and determine feedback parameters
        if SLF_CONF_RESP.keys == left_key:
            slf_conf_pos = (-250,0)
            slf_conf_resp = 7
        elif SLF_CONF_RESP.keys == center_key:
            slf_conf_pos = (0,0)
            slf_conf_resp = 8
        elif SLF_CONF_RESP.keys == right_key:
            slf_conf_pos = (250,0)
            slf_conf_resp = 9
        else:
            slf_conf_pos = (100000,0)
            slf_conf_resp = 0
    PolygonComponent SLF_LOW_BOX
      fillColor = white
      pos = (-250, 0)
      shape = rectangle
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $conf_time_max
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    TextComponent SLF_LOW_TEXT
      color = black
      letterHeight = 48
      pos = (-250, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $conf_time_max
      text = 1
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    PolygonComponent SLF_MID_BOX
      fillColor = white
      shape = rectangle
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $conf_time_max
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    TextComponent SLF_MID_TEXT
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $conf_time_max
      text = 2
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    PolygonComponent SLF_HIGH_BOX
      fillColor = white
      pos = (250, 0)
      shape = rectangle
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $conf_time_max
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    TextComponent SLF_HIGH_TEXT
      color = black
      letterHeight = 48
      pos = (250, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $conf_time_max
      text = 3
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    KeyboardComponent SLF_CONF_RESP
      allowedKeys = left_key,center_key,right_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $conf_time_max
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  Routine SlfConfFb
    PolygonComponent SLF_FB2_FRAME
      fillColor = $slf_color
      lineColor = $slf_color
      pos [set every repeat] = $slf_conf_pos
      shape = rectangle
      size = (220, 220)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_time
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    PolygonComponent SLF_FB2_LOW_BOX
      fillColor = white
      pos = (-250, 0)
      shape = rectangle
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_time
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    TextComponent SLF_FB2_LOW_TEXT
      color = black
      letterHeight = 48
      pos = (-250, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_time
      text = 1
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    PolygonComponent SLF_FB2_MID_BOX
      fillColor = white
      shape = rectangle
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_time
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    TextComponent SLF_FB2_MID_TEXT
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_time
      text = 2
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    PolygonComponent SLF_FB2_HIGH_BOX
      fillColor = white
      pos = (250, 0)
      shape = rectangle
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_time
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    TextComponent SLF_FB2_HIGH_TEXT
      color = black
      letterHeight = 48
      pos = (250, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_time
      text = 3
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  Routine Appreciation
    TextComponent APPRECIATION
      letterHeight = 48
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for your cooperation in the experiment!
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  Routine TestChoice
    CodeComponent TEST_CHOICE_CODE
      Code Type = Py
      Begin Routine:
        if test_seq_pattern == 1: # SS condition
            test_img1 = slf_dict[test_loc1]
            test_img2 = slf_dict[test_loc2]

        elif test_seq_pattern == 2: # OO condition
            test_img1 = obs_dict[test_loc1]
            test_img2 = obs_dict[test_loc2]

        elif test_seq_pattern == 3: # SO condition
            test_img1 = slf_dict[test_loc1]
            test_img2 = obs_dict[test_loc2]

        elif test_seq_pattern == 4: # OS condition
            test_img1 = obs_dict[test_loc1]
            test_img2 = slf_dict[test_loc2]

        #if test_loc1 == test_loc2:
        #    test_seq_pattern = 5

        # Get the presented time in test-choice
        test_choice_pres_time = onset.getTime() + 0.5 # Consider the fixation
      End Routine:
        # Get the responsed time in test-choice
        test_choice_resp_time = onset.getTime()

        # Initialize in case skipping slf-conf
        test_conf_resp = 0
        test_conf_pres_time = 0
        test_conf_resp_time = 0
        is_test_resp = 0

        # Receive choice responses and determine reward and feedback parameters
        if TEST_CHOICE_RESP.keys == left_key:
            test_choice_pos = (-200,0)
            test_choice_resp = 1
            test_choice_loc = test_loc1
            test_reward = 0
            test_reward_text = "?"
            is_test_resp = 1
        elif TEST_CHOICE_RESP.keys == right_key:
            test_choice_pos = (200,0)
            test_choice_resp = 2
            test_choice_loc = test_loc2
            test_reward = 0
            test_reward_text = "?"
            is_test_resp = 1
        else:
            test_choice_pos = (100000,0)
            test_choice_resp = 0
            test_choice_loc = 0
            test_reward = 0
            test_reward_text = "F"

        # Add points according to the response
        test_pt = 2 if test_correct == 3 else\
                  1 if test_choice_resp == test_correct else 0
    TextComponent TEST_FIX1
      letterHeight = 60
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $choice_time_max+0.5
      text = +
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    ImageComponent TEST_IMG1
      image [set every repeat] = $'img/' + test_img1
      pos = (-200, 0)
      size = (200, 200)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $choice_time_max
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    ImageComponent TEST_IMG2
      image [set every repeat] = $'img/' + test_img2
      pos = (200, 0)
      size = (200, 200)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $choice_time_max
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    KeyboardComponent TEST_CHOICE_RESP
      allowedKeys = left_key,right_key
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $choice_time_max
      storeCorrect = True
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  Routine TestChoiceFb
    TextComponent TEST_FIX2
      letterHeight = 60
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_time
      text = +
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    PolygonComponent TEST_FB1_FRAME
      fillColor = $test_color
      lineColor = $test_color
      lineWidth = 20
      pos [set every repeat] = $test_choice_pos
      shape = rectangle
      size = (220, 220)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_time
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    ImageComponent TEST_FB1_IMG1
      image [set every repeat] = $'img/' + test_img1
      pos = (-200, 0)
      size = (200,200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_time
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    ImageComponent TEST_FB1_IMG2
      image [set every repeat] = $'img/' + test_img2
      pos = (200, 0)
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_time
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  Routine ObsInstr
    TextComponent OBS_INSTR
      color = $obs_color
      letterHeight = 48
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = Observation
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  Routine TestInstr
    TextComponent TEST_INSTR
      color = $test_color
      letterHeight = 48
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = Test
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  Routine TestConf
    CodeComponent TEST_CONF_CODE
      Code Type = Py
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      Begin Routine:
        # Get the presented time in test-confidence
        test_conf_pres_time = onset.getTime()
      End Routine:
        # Get the responsed time in test-confidence
        test_conf_resp_time = onset.getTime()

        # Receive confidence responses in test and determine feedback parameters
        if TEST_CONF_RESP.keys == left_key:
            test_conf_pos = (-250,0)
            test_conf_resp = 7
        elif TEST_CONF_RESP.keys == center_key:
            test_conf_pos = (0,0)
            test_conf_resp = 8
        elif TEST_CONF_RESP.keys == right_key:
            test_conf_pos = (250,0)
            test_conf_resp = 9
        else:
            test_conf_pos = (100000,0)
            test_conf_resp = 0
    PolygonComponent TEST_LOW_BOX
      fillColor = white
      pos = (-250, 0)
      shape = rectangle
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $conf_time_max
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    TextComponent TEST_LOW_TEXT
      color = black
      letterHeight = 48
      pos = (-250, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $conf_time_max
      text = 1
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    PolygonComponent SLF_TEST_BOX
      fillColor = white
      shape = rectangle
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $conf_time_max
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    TextComponent TEST_MID_TEXT
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $conf_time_max
      text = 2
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    PolygonComponent TEST_HIGH_BOX
      fillColor = white
      pos = (250, 0)
      shape = rectangle
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $conf_time_max
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    TextComponent TEST_HIGH_TEXT
      color = black
      letterHeight = 48
      pos = (250, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $conf_time_max
      text = 3
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    KeyboardComponent TEST_CONF_RESP
      allowedKeys = left_key,center_key,right_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $conf_time_max
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  Routine TestConfFb
    PolygonComponent TEST_FB2_FRAME
      fillColor = $test_color
      lineColor = $test_color
      pos [set every repeat] = $test_conf_pos
      shape = rectangle
      size = (220, 220)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_time
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    PolygonComponent TEST_FB2_LOW_BOX
      fillColor = white
      pos = (-250, 0)
      shape = rectangle
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_time
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    TextComponent TEST_FB2_LOW_TEXT
      color = black
      letterHeight = 48
      pos = (-250, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_time
      text = 1
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    PolygonComponent TEST_FB2_MID_BOX
      fillColor = white
      shape = rectangle
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_time
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    TextComponent TEST_FB2_MID_TEXT
      color = black
      letterHeight = 48
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_time
      text = 2
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    PolygonComponent TEST_FB2_HIGH_BOX
      fillColor = white
      pos = (250, 0)
      shape = rectangle
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_time
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    TextComponent TEST_FB2_HIGH_TEXT
      color = black
      letterHeight = 48
      pos = (250, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedback_time
      text = 3
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  Routine SlfReward
    CodeComponent SLF_REWARD_CODE
      Code Type = Py
      Begin Routine:
        # Get the presented time in slf-reward
        slf_reward_pres_time = onset.getTime()
      End Routine:
        # Get the responsed time in slf-reward
        slf_reward_resp_time = onset.getTime()

        slf_choice_time = slf_choice_resp_time - slf_choice_pres_time
        slf_conf_time = slf_conf_resp_time - slf_conf_pres_time

        # Output slf data
        slf_data_table[slf_serial_num] = [game_serial_num, slf_serial_num+1, block_num,
                                         slf_seq_pattern, slf_loc_pattern,
                                         slf_loc1, slf_loc2, slf_scale,
                                         slf_pt, slf_conf_resp, slf_reward,
                                         np.round(slf_choice_time, 3), np.round(slf_conf_time, 3),
                                         slf_img.index(slf_img1)+1, slf_img.index(slf_img2)+1,
                                         slf_choice_resp, slf_correct, slf_choice_loc,
                                         np.round(slf_choice_pres_time, 3), np.round(slf_choice_resp_time, 3),
                                         np.round(slf_conf_pres_time, 3), np.round(slf_conf_resp_time, 3),
                                         np.round(slf_reward_pres_time, 3), np.round(slf_reward_resp_time, 3)]

        # Save matlab file
        io.savemat(out_name + '.mat', {'out_mat':out_dict})

        # Save excel file
        out_book = load_workbook(filename=out_xlsx)
        slf_sheet_name = out_book.sheetnames[0]
        slf_sheet = out_book[slf_sheet_name]
        for i in range(1, len(slf_data_table[slf_serial_num])+1):
            slf_sheet.cell(slf_serial_num+1, i, value = slf_data_table[slf_serial_num][i-1])
        out_book.save(out_xlsx)

        # Update slf-count
        slf_serial_num += 1
        game_serial_num += 1
    PolygonComponent SLF_FB3_FRAME
      fillColor = $slf_color
      lineColor = $slf_color
      lineWidth = 20
      pos [set every repeat] = $slf_choice_pos
      shape = rectangle
      size = (220, 220)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $reward_time
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    ImageComponent SLF_FB3_IMG1
      image [set every repeat] = $'img/' + slf_img1
      pos = (-200, 0)
      size = (200, 200)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $reward_time
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    ImageComponent SLF_FB3_IMG2
      image [set every repeat] = $'img/' + slf_img2
      pos = (200, 0)
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $reward_time
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    TextComponent SLF_REWARD
      letterHeight = 48
      startVal [time (s)] = 0
      stopVal [duration (s)] = $reward_time
      text [set every repeat] = $slf_reward_text
      units = pix
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  Routine TestReward
    CodeComponent TEST_REWARD_CODE
      Code Type = Py
      Begin Routine:
        # Get the presented time in test-reward
        test_reward_pres_time = onset.getTime()
      End Routine:
        # Get the responsed time in test-reward
        test_reward_resp_time = onset.getTime()

        test_choice_time = test_choice_resp_time - test_choice_pres_time
        test_conf_time = test_conf_resp_time - test_conf_pres_time

        # Output test data
        test_data_table[test_serial_num] = [game_serial_num, test_serial_num+1, block_num,
                                           test_seq_pattern, test_loc_pattern,
                                           test_loc1, test_loc2, test_scale,
                                           test_pt, test_conf_resp, test_reward,
                                           np.round(test_choice_time,3), np.round(test_conf_time,3),
                                           test_img.index(test_img1)+1, test_img.index(test_img2)+1,
                                           test_choice_resp, test_correct, test_choice_loc,
                                           np.round(test_choice_pres_time,3), np.round(test_choice_resp_time,3),
                                           np.round(test_conf_pres_time, 3), np.round(test_conf_resp_time, 3),
                                           np.round(test_reward_pres_time, 3), np.round(test_reward_resp_time, 3)]

        # Save matlab file
        io.savemat(out_name + '.mat', {'out_mat':out_dict})

        # Save excel file
        out_book = load_workbook(filename=out_xlsx)
        test_sheet_name = out_book.sheetnames[2]
        test_sheet = out_book[test_sheet_name]
        for i in range(1, len(test_data_table[test_serial_num])+1):
            test_sheet.cell(test_serial_num+1, i, value = test_data_table[test_serial_num][i-1])
        out_book.save(out_xlsx)

        # Update test-count
        test_serial_num += 1
        game_serial_num += 1
    PolygonComponent TEST_FB3_FRAME
      fillColor = $test_color
      lineColor = $test_color
      lineWidth = 20
      pos [set every repeat] = $test_choice_pos
      shape = rectangle
      size = (220, 220)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $reward_time
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    ImageComponent TEST_FB3_IMG1
      image [set every repeat] = $'img/' + test_img1
      pos = (-200, 0)
      size = (200, 200)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $reward_time
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    ImageComponent TEST_FB3_IMG2
      image [set every repeat] = $'img/' + test_img2
      pos = (200, 0)
      size = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $reward_time
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    TextComponent TEST_REWARD
      letterHeight = 48
      startVal [time (s)] = 0
      stopVal [duration (s)] = $reward_time
      text [set every repeat] = $test_reward_text
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  Routine ObsChoice
    CodeComponent OBS_CHOICE_CODE
      Code Type = Py
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      Begin Routine:
        # Determine the images and parameters based on the self record
        obs_img1 = obs_dict[obs_loc1]
        obs_img2 = obs_dict[obs_loc2]

        obs_choice_pos = (-200, 0) if obs_choice_resp == 1 else\
                         (200, 0) if obs_choice_resp == 2 else\
                         (100000, 0)

        obs_conf_pos = (-250, 0) if obs_conf_resp == 7 else\
                       (0, 0) if obs_conf_resp == 8 else\
                       (250, 0) if obs_conf_resp == 9 else\
                       (100000, 0)
    TextComponent OBS_FIX
      letterHeight = 60
      startVal [time (s)] = 0
      stopVal [duration (s)] = $obs_choice_time + feedback_time + 0.5
      text = +
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    PolygonComponent OBS_FB1_FRAME
      fillColor = $obs_color
      lineColor = $obs_color
      lineWidth = 20
      pos [set every repeat] = $obs_choice_pos
      shape = rectangle
      size = (220, 220)
      startVal [time (s)] = $obs_choice_time + 0.5
      stopVal [duration (s)] = $feedback_time
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    ImageComponent OBS_IMG1
      image [set every repeat] = $'img/' + obs_img1
      pos [set every repeat] = (-200, 0)
      size = (200, 200)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $obs_choice_time + feedback_time
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    ImageComponent OBS_IMG2
      image [set every repeat] = $'img/' + obs_img2
      pos = (200, 0)
      size = (200, 200)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $obs_choice_time + feedback_time
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  Routine ObsConf
    PolygonComponent OBS_FB2_FRAME
      fillColor = $obs_color
      lineColor = $obs_color
      pos [set every repeat] = $obs_conf_pos
      shape = rectangle
      size = (220, 220)
      startVal [time (s)] = $obs_conf_time
      stopVal [duration (s)] = $feedback_time
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    PolygonComponent OBS_LOW_BOX
      fillColor = white
      pos = (-250, 0)
      shape = rectangle
      size = (200, 200)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $obs_conf_time + feedback_time
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    TextComponent OBS_LOW_TEXT
      color = black
      letterHeight = 48
      pos = (-250, 0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $obs_conf_time + feedback_time
      text = 1
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    PolygonComponent OBS_MID_BOX
      fillColor = white
      shape = rectangle
      size = (200, 200)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $obs_conf_time + feedback_time
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    TextComponent OBS_MID_TEXT
      color = black
      letterHeight = 48
      startVal [time (s)] = 0
      stopVal [duration (s)] = $obs_conf_time + feedback_time
      text = 2
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    PolygonComponent OBS_HIGH_BOX
      fillColor = white
      pos = (250, 0)
      shape = rectangle
      size = (200, 200)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $obs_conf_time + feedback_time
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    TextComponent OBS_HIGH_TEXT
      color = black
      letterHeight = 48
      pos = (250, 0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $obs_conf_time + feedback_time
      text = 3
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  Routine ObsReward
    CodeComponent OBS_REWARD_CODE
      Code Type = Py
      End Routine:
        # Output obs data
        obs_data_table[obs_serial_num] = [game_serial_num, obs_serial_num+1, block_num,
                                         obs_seq_pattern, obs_loc_pattern,
                                         obs_loc1, obs_loc2, obs_scale,
                                         obs_pt, obs_conf_resp, obs_reward,
                                         np.round(obs_choice_time, 3), np.round(obs_conf_time, 3),
                                         obs_img1_idx, obs_img2_idx,
                                         obs_choice_resp, obs_correct, obs_choice_loc,
                                         np.round(obs_choice_pres_time, 3), np.round(obs_choice_resp_time, 3),
                                         np.round(obs_conf_pres_time, 3), np.round(obs_conf_resp_time, 3),
                                         np.round(obs_reward_pres_time, 3), np.round(obs_reward_resp_time, 3)]

        # Save matlab file
        io.savemat(out_name + '.mat', {'out_mat':out_dict})

        # Save excel file
        out_book = load_workbook(filename=out_xlsx)
        obs_sheet_name = out_book.sheetnames[1]
        obs_sheet = out_book[obs_sheet_name]
        for i in range(1, len(obs_data_table[obs_serial_num])+1):
            obs_sheet.cell(obs_serial_num+1, i, value = obs_data_table[obs_serial_num][i-1])
        out_book.save(out_xlsx)

        # Update obs-count
        obs_serial_num += 1
        game_serial_num += 1
    PolygonComponent OBS_FB3_FRAME
      fillColor = $obs_color
      lineColor = $obs_color
      lineWidth = 20
      pos [set every repeat] = $obs_choice_pos
      shape = rectangle
      size = (220, 220)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $reward_time
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    ImageComponent OBS_FB3_IMG1
      image [set every repeat] = $'img/' + obs_img1
      pos = (-200, 0)
      size = (200, 200)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $reward_time
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    ImageComponent OBS_FB3_IMG2
      image [set every repeat] = $'img/' + obs_img2
      pos = (200, 0)
      size = (200, 200)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $reward_time
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    TextComponent OBS_REWARD
      letterHeight = 48
      startVal [time (s)] = 0
      stopVal [duration (s)] = $reward_time
      text [set every repeat] = ?
      units = pix
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  Routine BlockRest
    CodeComponent BLOCK_REST_CODE
      Code Type = Py
      Begin Routine:
        message = '1 Block is over.\nTake a break.\nPress ‘space’ to start next Block.' if block_num == 1 else\
                  '2 Block is over.\nTake a break.\nPress ‘space’ to start next Block.' if block_num == 2 else\
                  'Game is over.\nPress ‘space’ to exit.'
      End Routine:
        block_num += 1
        core.wait(3)
    TextComponent BLOCK_REST_TEXT
      letterHeight = 48
      startVal [time (s)] = 0.0
      text [set every repeat] = $message
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    KeyboardComponent BLOCK_REST_SKIP
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Init
  LoopInitiator BlockLoop loopType="TrialHandler"
    conditionsFile = sequence/SequenceConditionPattern1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'slf_file': 'SequenceSlf11.xlsx', 'obs_file': 'SequenceObs11.xlsx', 'test_file': 'SequenceTest11.xlsx'},
      {'slf_file': 'SequenceSlf12.xlsx', 'obs_file': 'SequenceObs12.xlsx', 'test_file': 'SequenceTest12.xlsx'},
      {'slf_file': 'SequenceSlf13.xlsx', 'obs_file': 'SequenceObs13.xlsx', 'test_file': 'SequenceTest13.xlsx'}]
    Routine SlfInstr
    LoopInitiator SlfSequence loopType="TrialHandler"
      conditionsFile = $'sequence/' + slf_file
      loopType = sequential
      nReps = 1
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      Routine SlfChoice
      Routine SlfChoiceFb
      LoopInitiator SlfSkip loopType="TrialHandler"
        loopType = random
        nReps = is_slf_resp
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        Routine SlfConf
        Routine SlfConfFb
      LoopTerminator SlfSkip
      Routine SlfReward
    LoopTerminator SlfSequence
    Routine ObsInstr
    LoopInitiator ObsSequence loopType="TrialHandler"
      conditionsFile = $'sequence/' + obs_file
      loopType = sequential
      nReps = 1
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      Routine ObsChoice
      Routine ObsConf
      Routine ObsReward
    LoopTerminator ObsSequence
    Routine TestInstr
    LoopInitiator TestSequence loopType="TrialHandler"
      conditionsFile = $'sequence/' + test_file
      loopType = sequential
      nReps = 1
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      Routine TestChoice
      Routine TestChoiceFb
      LoopInitiator TestSkip loopType="TrialHandler"
        loopType = random
        nReps = is_test_resp
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        Routine TestConf
        Routine TestConfFb
      LoopTerminator TestSkip
      Routine TestReward
    LoopTerminator TestSequence
    Routine BlockRest
  LoopTerminator BlockLoop
  Routine Appreciation
