PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [960, 540]
  expName = test
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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Flow
  Routine trial
